CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', 'âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<FrameNumber>([0-9]){3})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Run>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load the images by matching files in all folders against the text pattern âx80x98GFPHistoneâx80x99.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:T_Cells
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98Runâx80x99 metadata so that each folder is analyzed separately. ']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert the color image to grayscale.']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
    Select the input image:T_Cells
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the fly embryos from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:OrigGray
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
TrackObjects:[module_num:7|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notes:['Track the embryos across images using the Overlap method: tracked objects are identified by the amount of frame-to-frame overlap. Save an image of embryos labeled with a unique number across time.']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
    Choose a tracking method:LAP
    Select the objects to track:Cells
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Random
    Number of standard deviations for search radius:2
    Search radius limit, in pixel units (Min,Max):15,20
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:1
    Split alternative cost:999
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:15
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:2
    Filter objects by lifetime?:No
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    Mitosis alternative cost:999
    Maximum mitosis distance, in pixel units:1
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
SaveImages:[module_num:8|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notes:['Save the tiled image as an PNG, naming each image according to âx80x98Specimenâx80x99 and âx80x98Frameâx80x99 metadata of the original image. Save the image in a new sub-folder created and named according to the âx80x98Runâx80x99 metadata.']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enabled:False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
    Select the type of image to save:Movie/Stack
    Select the image to save:TrackedCells
    Select method for constructing file names:Single name
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    Enter single file name:Cells-\g<FrameNumber>
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    Saved file format:png
    Output file location:Elsewhere...|C:\\Users\\shane\\Documents
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    How to save the series:T (Time)
    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:9|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notes:['Exporting the tracks to a excell sheet']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\Users\\shane\\Documents
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MySpreadSheet-FrameNumber
    Overwrite existing files without warning?:No
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